PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1707, 960]
  expName = conditions2loopnew
  keyboardBackend = ioHub
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Routines
  Routine c2even
    SoundComponent RCLO
      sound = RCLO20.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent filler4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine c1odd
    SoundComponent ROLO
      sound = ROLO20.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent filler1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine c1even
    SoundComponent RCLC
      sound = RCLC20.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent filler2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine c2odd
    SoundComponent ROLC
      sound = ROLC20.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent filler3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine c3odd
    SoundComponent RCLO2
      sound = RCLO20.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent filler5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine c4even
    SoundComponent ROLC2
      sound = ROLC20.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent filler6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine startexp
    KeyboardComponent key
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent waitingforscanner
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for scanner
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Flow
  Routine startexp
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = C:\Users\khana\Downloads\1loopexp (1).xlsx
    loopType = sequential
    nReps = 10
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    conditions:
      [{'participant': 'one', 'Routine': 'c1odd', 'Routine2': 'c1even'},
      {'participant': 'two', 'Routine': 'c2odd', 'Routine2': 'c2even'},
      {'participant': 'three', 'Routine': 'c3odd', 'Routine2': 'c3even'}]
    Routine c1odd
    Routine c1even
    Routine c2odd
    Routine c2even
    Routine c3odd
    Routine c4even
  LoopTerminator Loop
